<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">
         
    <reader>
      <slot>1008</slot>
      <dll>gadgetron_mricore</dll>
      <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
    </reader>
    <reader>
        <slot>1026</slot>
        <dll>gadgetron_mricore</dll>
        <classname>GadgetIsmrmrdWaveformMessageReader</classname>
    </reader>
    <writer>
      <slot>1022</slot>
      <dll>gadgetron_mricore</dll>
      <classname>MRIImageWriter</classname>
    </writer>
    <gadget>
      <name>NoiseAdjust</name>
      <dll>gadgetron_mricore</dll>
      <classname>NoiseAdjustGadget</classname>
    </gadget>

    <gadget>
      <name>PCA</name>
      <dll>gadgetron_mricore</dll>
      <classname>PCACoilGadget</classname>
    </gadget>

    <gadget>
      <name>CoilReduction</name>
      <dll>gadgetron_mricore</dll>
      <classname>CoilReductionGadget</classname>
      <property><name>coils_out</name><value>16</value></property>
    </gadget>

    <gadget>
      <name>gpuRadialSensePrepGadget</name>
      <dll>gadgetron_gpuradial</dll>
      <classname>gpuRadialSensePrepGadget</classname>
      <property><name>deviceno</name><value>1</value></property>
      <property><name>mode</name><value>4</value></property>
      <property><name>fcrl_custom_angle_user_int_index</name><value>4</value></property>
      <property><name>profiles_per_frame</name><value>10</value></property>

      <property><name>sliding_window_profiles</name><value>0</value></property>

      <property><name>rotations_per_reconstruction</name><value>0</value></property>
      <property><name>buffer_frames_per_rotation</name><value>32</value></property>
      <property><name>buffer_length_in_rotations</name><value>1</value></property>
      <property><name>buffer_convolution_kernel_width</name><value>5.5</value></property>
      <property><name>buffer_convolution_oversampling_factor</name><value>1.25</value></property>
      <property><name>reconstruction_os_factor_x</name><value>1.5</value></property>
      <property><name>reconstruction_os_factor_y</name><value>1.5</value></property>
      <!-- ARKS spoke buffer -->
      <property><name>buffer_length_TRs</name><value>5000</value></property>
      <property><name>max_spokes_per_frame</name><value>256</value></property>
      <!-- ARKS toggle: true = full ARKS (buffer + gather + merge).
           false = plain mode-4 custom-angle + sliding window (no buffer, no gather, no log). -->
      <property><name>arks_gather_enabled</name><value>true</value></property>
      <!-- Lag slot range in fcrl_iceparam[0..23]. Format: "start..end" (inclusive).
           iceparam[0..7]=user_int[0..7], [8..15]=user_float[0..7], [16..23]=idx.user[0..7] -->
      <property><name>arks_lag_range</name><value>6..23</value></property>
      <!-- ARKS file logging -->
      <property><name>arks_log_enabled</name><value>true</value></property>
      <property><name>arks_log_file</name><value>/work/arks_log.txt</value></property>
    </gadget>
    
    <gadget>
      <name>slice0</name>
      <dll>gadgetron_gpuparallelmri</dll>
      <classname>gpuLALMSenseGadget</classname>
      <property><name>pass_on_undesired_data</name><value>true</value></property>
      <property><name>deviceno</name>                <value>1</value></property>
      <property><name>sliceno</name>                 <value>0</value></property>
      <property><name>number_of_iterations</name>    <value>20</value></property>
      <property><name>oversampling_factor</name>     <value>1.25</value></property>
      <property><name>kernel_width</name>            <value>5.5</value></property>
      <property><name>coils_per_subset</name>        <value>4</value></property>
      <property><name>output_convergence</name><value>true</value></property>
      <property><name>lambda</name><value>3</value></property>
      <property><name>huber_value</name><value>1</value></property>
    </gadget>

    <gadget>
      <name>gpuCgSenseGadget_slice1</name>
      <dll>gadgetron_gpuparallelmri</dll>
      <classname>gpuLALMSenseGadget</classname>
      <property><name>pass_on_undesired_data</name>  <value>true</value></property>
      <property><name>deviceno</name>                <value>1</value></property>
      <property><name>sliceno</name>                 <value>1</value></property>
      <property><name>number_of_iterations</name>    <value>number_of_iterations@slice0</value></property>
      <property><name>oversampling_factor</name>     <value>oversampling_factor@slice0</value></property>
      <property><name>kernel_width</name>            <value>kernel_width@slice0</value></property>
      <property><name>coils_per_subset</name>        <value>coils_per_subset@slice0</value></property>
      <property><name>output_convergence</name><value>output_convergence@slice0</value></property>
      <property><name>lambda</name><value>lambda@slice0</value></property>
      <property><name>huber_value</name><value>huber_value@slice0</value></property>
    </gadget>

    <gadget>
      <name>gpuCgSenseGadget_slice2</name>
      <dll>gadgetron_gpuparallelmri</dll>
      <classname>gpuLALMSenseGadget</classname>
      <property><name>pass_on_undesired_data</name>  <value>true</value></property>
      <property><name>deviceno</name>                <value>1</value></property>
      <property><name>sliceno</name>                 <value>2</value></property>
      <property><name>number_of_iterations</name>    <value>number_of_iterations@slice0</value></property>
      <property><name>oversampling_factor</name>     <value>oversampling_factor@slice0</value></property>
      <property><name>kernel_width</name>            <value>kernel_width@slice0</value></property>
      <property><name>coils_per_subset</name>        <value>coils_per_subset@slice0</value></property>
      <property><name>output_convergence</name><value>output_convergence@slice0</value></property>
      <property><name>lambda</name><value>lambda@slice0</value></property>
      <property><name>huber_value</name><value>huber_value@slice0</value></property>
    </gadget>

    <gadget>
      <name>Extract</name>
      <dll>gadgetron_mricore</dll>
      <classname>ExtractGadget</classname>
    </gadget>

    <gadget>
      <name>ImageFinish</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageFinishGadget</classname>
    </gadget>
    
</gadgetronStreamConfiguration>
